# Generated by Configurator on Wed Nov 18 12:00:17 PST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,COM1,SerialManager,COM1
Device,COM11,SerialManager,COM11
Device,PRIME BSI,PVCAM,Camera-1
Device,TIScope,NikonTI,TIScope
Device,TIEpiShutter,NikonTI,TIEpiShutter
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,TITIRF,NikonTI,TITIRF
Device,Wheel-B,SutterLambda,Wheel-B
Device,Wheel-A,SutterLambda,Wheel-A
Device,Shutter-B,SutterLambda,Shutter-B
Device,Shutter-A,SutterLambda,Shutter-A
Device,LMM5-Hub,SpectralLMM5,LMM5-Hub
Device,LMM5-Shutter,SpectralLMM5,LMM5-Shutter
Device,FreeSerialPort,FreeSerialPort,FreeSerialPort

# Pre-init settings for devices
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,128000
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,1
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,19200
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM11,AnswerTimeout,500.0000
Property,COM11,BaudRate,9600
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,COM11,Verbose,1
Property,Wheel-B,Port,COM9
Property,Wheel-B,Timeout(ms),500
Property,Wheel-A,Port,COM9
Property,Wheel-A,Timeout(ms),500
Property,Shutter-B,Port,COM9
Property,Shutter-A,Port,COM9
Property,LMM5-Hub,Port,COM1
Property,FreeSerialPort,Port,COM11

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIEpiShutter,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,TITIRF,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,PRIME BSI
Property,Core,Shutter,LMM5-Shutter
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo 40x NA 1.25 WI
Label,TINosePiece,4,5-Unknown
Label,TINosePiece,3,4-Plan Apo TIRF 60x NA 1.45 Oil
Label,TINosePiece,2,3-S Plan Fluor 40x NA 0.60 Dry
Label,TINosePiece,1,2-Plan Apo 10x NA 0.45 Dry
Label,TINosePiece,0,1-Plan Apo 4x NA 0.20 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-DICan
Label,TIFilterBlock1,4,5-TIRF
Label,TIFilterBlock1,3,4------
Label,TIFilterBlock1,2,3-CFP03
Label,TIFilterBlock1,1,2-DA/01
Label,TIFilterBlock1,0,1------
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# Wheel-B
Label,Wheel-B,9,Filter-9
Label,Wheel-B,8,Filter-8
Label,Wheel-B,7,Filter-7
Label,Wheel-B,6,Filter-6
Label,Wheel-B,5,Filter-5
Label,Wheel-B,4,Filter-4
Label,Wheel-B,3,Filter-3
Label,Wheel-B,2,Filter-2
Label,Wheel-B,1,Filter-1
Label,Wheel-B,0,Filter-0
# Wheel-A
Label,Wheel-A,9,Filter-9
Label,Wheel-A,8,Filter-8
Label,Wheel-A,7,Filter-7
Label,Wheel-A,6,Filter-6
Label,Wheel-A,5,Filter-5
Label,Wheel-A,4,Filter-4
Label,Wheel-A,3,Filter-3
Label,Wheel-A,2,Filter-2
Label,Wheel-A,1,Filter-1
Label,Wheel-A,0,Filter-0

# Configuration presets
# Group: Confocal filter wheel
# Preset: Y_488_525
ConfigGroup,Confocal filter wheel,Y_488_525,Wheel-B,Label,Filter-2
ConfigGroup,Confocal filter wheel,Y_488_525,Wheel-B,State,2
ConfigGroup,Confocal filter wheel,Y_488_525,Wheel-B,Speed,2

# Preset: Full
ConfigGroup,Confocal filter wheel,Full,Wheel-B,Label,Filter-0
ConfigGroup,Confocal filter wheel,Full,Wheel-B,State,0
ConfigGroup,Confocal filter wheel,Full,Wheel-B,Speed,2

# Preset: Empty
ConfigGroup,Confocal filter wheel,Empty,Wheel-B,Label,Filter-9
ConfigGroup,Confocal filter wheel,Empty,Wheel-B,State,9
ConfigGroup,Confocal filter wheel,Empty,Wheel-B,Speed,2

# Preset: Y_561LP
ConfigGroup,Confocal filter wheel,Y_561LP,Wheel-B,Label,Filter-3
ConfigGroup,Confocal filter wheel,Y_561LP,Wheel-B,Speed,2
ConfigGroup,Confocal filter wheel,Y_561LP,Wheel-B,State,3


# Group: Turret filter
# Preset: 2-DA-01
ConfigGroup,Turret filter,2-DA-01,TIFilterBlock1,Label,2-DA/01

# Preset: 6-DICan
ConfigGroup,Turret filter,6-DICan,TIFilterBlock1,Label,6-DICan

# Preset: 4------
ConfigGroup,Turret filter,4------,TIFilterBlock1,Label,4------

# Preset: 3-CFP03
ConfigGroup,Turret filter,3-CFP03,TIFilterBlock1,Label,3-CFP03

# Preset: 1------
ConfigGroup,Turret filter,1------,TIFilterBlock1,Label,1------

# Preset: 5-TIRF
ConfigGroup,Turret filter,5-TIRF,TIFilterBlock1,Label,5-TIRF


# Group: Light path
# Preset: 2-Left100
ConfigGroup,Light path,2-Left100,TILightPath,Label,2-Left100

# Preset: 3-Right100
ConfigGroup,Light path,3-Right100,TILightPath,Label,3-Right100

# Preset: 1-Eye100
ConfigGroup,Light path,1-Eye100,TILightPath,Label,1-Eye100

# Preset: 4-Left80
ConfigGroup,Light path,4-Left80,TILightPath,Label,4-Left80


# Group: >>> Presets
# Preset: 561
ConfigGroup,>>> Presets,561,PRIME BSI,Binning,2x2
ConfigGroup,>>> Presets,561,Shutter-B,State,0
ConfigGroup,>>> Presets,561,LMM5-Hub,Transmission (%) 488nm-2,0.0000
ConfigGroup,>>> Presets,561,LMM5-Hub,Transmission (%) 561nm-4,50.0000
ConfigGroup,>>> Presets,561,LMM5-Shutter,488nm-2,0
ConfigGroup,>>> Presets,561,LMM5-Shutter,561nm-4,1
ConfigGroup,>>> Presets,561,LMM5-Shutter,Label,561nm-4_output-port B
ConfigGroup,>>> Presets,561,LMM5-Shutter,State,24
ConfigGroup,>>> Presets,561,LMM5-Shutter,output-port B,1
ConfigGroup,>>> Presets,561,Core,AutoShutter,0
ConfigGroup,>>> Presets,561,Wheel-B,Label,Filter-3
ConfigGroup,>>> Presets,561,Wheel-B,Speed,2
ConfigGroup,>>> Presets,561,Wheel-B,State,3
ConfigGroup,>>> Presets,561,PRIME BSI,ReadoutRate,200MHz 11bit

# Preset: 488
ConfigGroup,>>> Presets,488,PRIME BSI,Binning,2x2
ConfigGroup,>>> Presets,488,Shutter-B,State,0
ConfigGroup,>>> Presets,488,LMM5-Hub,Transmission (%) 488nm-2,10.0000
ConfigGroup,>>> Presets,488,LMM5-Shutter,488nm-2,1
ConfigGroup,>>> Presets,488,Core,AutoShutter,0
ConfigGroup,>>> Presets,488,LMM5-Shutter,561nm-4,0
ConfigGroup,>>> Presets,488,LMM5-Shutter,Label,488nm-2_output-port B
ConfigGroup,>>> Presets,488,LMM5-Shutter,State,18
ConfigGroup,>>> Presets,488,LMM5-Shutter,output-port B,1
ConfigGroup,>>> Presets,488,LMM5-Hub,Transmission (%) 561nm-4,0.0000
ConfigGroup,>>> Presets,488,Wheel-B,Label,Filter-2
ConfigGroup,>>> Presets,488,Wheel-B,Speed,2
ConfigGroup,>>> Presets,488,Wheel-B,State,2
ConfigGroup,>>> Presets,488,PRIME BSI,ReadoutRate,100MHz 16bit

# Preset: Brightfield
ConfigGroup,>>> Presets,Brightfield,PRIME BSI,Binning,2x2
ConfigGroup,>>> Presets,Brightfield,Wheel-B,Label,Filter-9
ConfigGroup,>>> Presets,Brightfield,Wheel-B,Speed,2
ConfigGroup,>>> Presets,Brightfield,Wheel-B,State,9
ConfigGroup,>>> Presets,Brightfield,Shutter-B,State,1
ConfigGroup,>>> Presets,Brightfield,LMM5-Hub,Transmission (%) 488nm-2,0.0000
ConfigGroup,>>> Presets,Brightfield,LMM5-Hub,Transmission (%) 561nm-4,0.0000
ConfigGroup,>>> Presets,Brightfield,LMM5-Shutter,488nm-2,0
ConfigGroup,>>> Presets,Brightfield,LMM5-Shutter,561nm-4,0
ConfigGroup,>>> Presets,Brightfield,LMM5-Shutter,Label,
ConfigGroup,>>> Presets,Brightfield,LMM5-Shutter,State,0
ConfigGroup,>>> Presets,Brightfield,LMM5-Shutter,output-port B,0
ConfigGroup,>>> Presets,Brightfield,Core,AutoShutter,0
ConfigGroup,>>> Presets,Brightfield,PRIME BSI,ReadoutRate,100MHz 16bit


# Group: DIA
# Preset: ON
ConfigGroup,DIA,ON,Shutter-B,State,1

# Preset: OFF
ConfigGroup,DIA,OFF,Shutter-B,State,0


# Group: LMM5-488-intensity
# Preset: 50
ConfigGroup,LMM5-488-intensity,50,LMM5-Hub,Transmission (%) 488nm-2,50.0000

# Preset: 9
ConfigGroup,LMM5-488-intensity,9,LMM5-Hub,Transmission (%) 488nm-2,9.0000

# Preset: 20
ConfigGroup,LMM5-488-intensity,20,LMM5-Hub,Transmission (%) 488nm-2,20.0000

# Preset: 8
ConfigGroup,LMM5-488-intensity,8,LMM5-Hub,Transmission (%) 488nm-2,8.0000

# Preset: 7
ConfigGroup,LMM5-488-intensity,7,LMM5-Hub,Transmission (%) 488nm-2,7.0000

# Preset: 6
ConfigGroup,LMM5-488-intensity,6,LMM5-Hub,Transmission (%) 488nm-2,6.0000

# Preset: 5
ConfigGroup,LMM5-488-intensity,5,LMM5-Hub,Transmission (%) 488nm-2,5.0000

# Preset: 10
ConfigGroup,LMM5-488-intensity,10,LMM5-Hub,Transmission (%) 488nm-2,10.0000

# Preset: 100
ConfigGroup,LMM5-488-intensity,100,LMM5-Hub,Transmission (%) 488nm-2,100.0000

# Preset: 0
ConfigGroup,LMM5-488-intensity,0,LMM5-Hub,Transmission (%) 488nm-2,0.0000


# Group: Objective
# Preset: 1-Plan Apo 4x NA 0.20 Dry
ConfigGroup,Objective,1-Plan Apo 4x NA 0.20 Dry,TINosePiece,Label,1-Plan Apo 4x NA 0.20 Dry

# Preset: 2-Plan Apo 10x NA 0.45 Dry
ConfigGroup,Objective,2-Plan Apo 10x NA 0.45 Dry,TINosePiece,Label,2-Plan Apo 10x NA 0.45 Dry

# Preset: 4-Plan Apo TIRF 60x NA 1.45 Oil
ConfigGroup,Objective,4-Plan Apo TIRF 60x NA 1.45 Oil,TINosePiece,Label,4-Plan Apo TIRF 60x NA 1.45 Oil

# Preset: 6-Plan Apo 40x NA 1.25 WI
ConfigGroup,Objective,6-Plan Apo 40x NA 1.25 WI,TINosePiece,Label,6-Plan Apo 40x NA 1.25 WI

# Preset: 5-Unknown
ConfigGroup,Objective,5-Unknown,TINosePiece,Label,5-Unknown

# Preset: 3-S Plan Fluor 40x NA 0.60 Dry
ConfigGroup,Objective,3-S Plan Fluor 40x NA 0.60 Dry,TINosePiece,Label,3-S Plan Fluor 40x NA 0.60 Dry


# Group: LMM5
# Preset: 561
ConfigGroup,LMM5,561,LMM5-Shutter,488nm-2,0
ConfigGroup,LMM5,561,LMM5-Shutter,561nm-4,1
ConfigGroup,LMM5,561,LMM5-Shutter,Label,561nm-4_output-port B
ConfigGroup,LMM5,561,LMM5-Shutter,State,24
ConfigGroup,LMM5,561,LMM5-Shutter,output-port B,1

# Preset: 488
ConfigGroup,LMM5,488,LMM5-Shutter,488nm-2,1
ConfigGroup,LMM5,488,LMM5-Shutter,561nm-4,0
ConfigGroup,LMM5,488,LMM5-Shutter,Label,488nm-2_output-port B
ConfigGroup,LMM5,488,LMM5-Shutter,State,18
ConfigGroup,LMM5,488,LMM5-Shutter,output-port B,1

# Preset: 488+561
ConfigGroup,LMM5,488+561,LMM5-Shutter,488nm-2,1
ConfigGroup,LMM5,488+561,LMM5-Shutter,561nm-4,1
ConfigGroup,LMM5,488+561,LMM5-Shutter,Label,488nm-2_561nm-4_output-port B
ConfigGroup,LMM5,488+561,LMM5-Shutter,State,26
ConfigGroup,LMM5,488+561,LMM5-Shutter,output-port B,1

# Preset: OFF
ConfigGroup,LMM5,OFF,LMM5-Shutter,488nm-2,0
ConfigGroup,LMM5,OFF,LMM5-Shutter,561nm-4,0
ConfigGroup,LMM5,OFF,LMM5-Shutter,Label,
ConfigGroup,LMM5,OFF,LMM5-Shutter,State,0
ConfigGroup,LMM5,OFF,LMM5-Shutter,output-port B,0


# Group: LMM5-561-intensity
# Preset: 5
ConfigGroup,LMM5-561-intensity,5,LMM5-Hub,Transmission (%) 561nm-4,5.0000

# Preset: 50
ConfigGroup,LMM5-561-intensity,50,LMM5-Hub,Transmission (%) 561nm-4,50.0000

# Preset: 60
ConfigGroup,LMM5-561-intensity,60,LMM5-Hub,Transmission (%) 561nm-4,60.0000

# Preset: 100
ConfigGroup,LMM5-561-intensity,100,LMM5-Hub,Transmission (%) 561nm-4,100.0000

# Preset: 10
ConfigGroup,LMM5-561-intensity,10,LMM5-Hub,Transmission (%) 561nm-4,10.0000

# Preset: 70
ConfigGroup,LMM5-561-intensity,70,LMM5-Hub,Transmission (%) 561nm-4,70.0000

# Preset: 0
ConfigGroup,LMM5-561-intensity,0,LMM5-Hub,Transmission (%) 561nm-4,0.0000

# Preset: 20
ConfigGroup,LMM5-561-intensity,20,LMM5-Hub,Transmission (%) 561nm-4,20.0000



# PixelSize settings

